PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = emotional stroop_untitled
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
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    TextComponent word_stim
      color [set every repeat] = $color
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 5.0
      text [set every repeat] = $word
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    KeyboardComponent resp
      allowedKeys = 'r','g','b','y'
      correctAns = $correct_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine Instructions
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    TextComponent instr_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Welcome — Emotional Stroop Task.
        NAME THE COLOUR of each word as quickly and accurately as possible.

        Key mapping:
        R = Red  |  G = Green  |  B = Blue  |  Y = Yellow

        Press SPACE to begin.
  Routine Fixation
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    TextComponent fix_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine Thanks
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thanks!
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions file_emotional stroop task.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'word': 'Fear', 'word_type': 'emotional', 'color': 'red', 'stim_condition': 'C', 'correct_resp': 'r'},
      {'word': 'Pain', 'word_type': 'emotional', 'color': 'blue', 'stim_condition': 'I', 'correct_resp': 'b'},
      {'word': 'Death', 'word_type': 'emotional', 'color': 'green', 'stim_condition': 'I', 'correct_resp': 'g'},
      {'word': 'Panic', 'word_type': 'emotional', 'color': 'yellow', 'stim_condition': 'I', 'correct_resp': 'y'},
      {'word': 'Abuse', 'word_type': 'emotional', 'color': 'red', 'stim_condition': 'C', 'correct_resp': 'r'},
      {'word': 'Threat', 'word_type': 'emotional', 'color': 'blue', 'stim_condition': 'I', 'correct_resp': 'b'},
      {'word': 'Injury', 'word_type': 'emotional', 'color': 'green', 'stim_condition': 'I', 'correct_resp': 'g'},
      {'word': 'Sadness', 'word_type': 'emotional', 'color': 'yellow', 'stim_condition': 'I', 'correct_resp': 'y'},
      {'word': 'Anger', 'word_type': 'emotional', 'color': 'red', 'stim_condition': 'C', 'correct_resp': 'r'},
      {'word': 'Violence', 'word_type': 'emotional', 'color': 'blue', 'stim_condition': 'I', 'correct_resp': 'b'},
      {'word': 'Chair', 'word_type': 'neutral', 'color': 'green', 'stim_condition': 'I', 'correct_resp': 'g'},
      {'word': 'Bottle', 'word_type': 'neutral', 'color': 'yellow', 'stim_condition': 'I', 'correct_resp': 'y'},
      {'word': 'Window', 'word_type': 'neutral', 'color': 'red', 'stim_condition': 'I', 'correct_resp': 'r'},
      {'word': 'Table', 'word_type': 'neutral', 'color': 'blue', 'stim_condition': 'I', 'correct_resp': 'b'}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
    Routine trial
  LoopTerminator trials
  Routine Thanks
